// this is same as file "Hill_test01.cellml" only I have made the following changes
//   time period of KCl was changed from "t1_KCL=100 and t2_KCL=2000" to  "t1_KCL=266 and t2_KCL=2066"
def model Test1 as
  def import using "EC_SMC_Units.cellml" for
    unit C_per_mol using unit C_per_mol;
    unit first_order_rate_constant using unit first_order_rate_constant;
    unit mJ_per_K_per_mol using unit mJ_per_K_per_mol;
    unit M_per_cmsq using unit M_per_cmsq;
    unit mV using unit mV;
    unit per_sec using unit per_sec;
    unit per_uM using unit per_uM;
    unit per_uM2 using unit per_uM2;
    unit per_uM_per_sec using unit per_uM_per_sec;
    unit uM using unit uM;
    unit nS_per_uM using unit nS_per_uM;
    unit uA_per_cmsq using unit uA_per_cmsq;
    unit uM2 using unit uM2;
    unit umol_per_cmsq using unit umol_per_cmsq;
    unit uM_per_sec using unit uM_per_sec;
  enddef;
  def import using "SMC_Ca_Model1.cellml" for
    comp asm_ca using comp asm_ca;
    comp ca_parameters using comp ca_parameters;
    comp calcium using comp calcium;
  enddef;
  def import using "SMC_NO_Model1.cellml" for
    comp sGC_SMC using comp sGC_SMC;
  enddef;
  def import using "EC_Model1.cellml" for
    comp Activation_of_G_proteins using comp Activation_of_G_proteins;
    comp Activation_of_protein_kinases using comp Activation_of_protein_kinases;
    comp Calcium_signalling using comp Calcium_signalling;
    comp NO_production using comp NO_production;
    comp Phosphorylation_and_formation_of_eNOS_complexes using comp Phosphorylation_and_formation_of_eNOS_complexes;
  enddef;

  def comp Environment as
    var tau: dimensionless {pub: out};
    var tau0: dimensionless {init: 0};
    var tau1: dimensionless {init: 20};
    var tau2: dimensionless {init: 8};
    var tau3: dimensionless {init: 16};
    var tau_c: dimensionless {init: 0};
    var t0_tau: second {init: 0};
    var t1_tau: second {init: 300};
    // 40
    var t2_tau: second {init: 350};
    // 110
    var t3_tau: second {init: 400};
    // 170
    var t4_tau: second {init: 500};
    // 280
    var tn0: dimensionless {init: 0};
    // when tn0==1,tn1 =tn2=0)  then tau is a step function of time
    var tn1: dimensionless {init: 0};
    // when tn1=1,tn2=tn0=0) then  tau==tau_c
    var tn2: dimensionless {init: 1};
    // when tn2=1,tn1=tn0=0) then (tau==tau_c for (t1_tau<time<=t4_time) , otherwise tau==tau0
    var time: second {pub: out};
    tau = sel
      case (time >= t0_tau) and (time <= t1_tau):
        tau0*tn0+tau_c*tn1+tau0*tn2;
      case (time >= t1_tau) and (time <= t2_tau):
        tau1*tn0+tau_c*tn1+tau_c*tn2;
      otherwise:
        tau0*tn0+tau_c*tn1+tau0*tn2;
      case (time >= t2_tau) and (time <= t3_tau):
        tau2*tn0+tau_c*tn1+tau_c*tn2;
      case (time >= t3_tau) and (time <= t4_tau):
        tau3*tn0+tau_c*tn1+tau_c*tn2;
    endsel;
  enddef;
  // start of SMC_calcium_file_$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$
  // Ca_Model
  // End of SMC_calcium_file_$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$

  def comp SMC_Par as
    var Ca_in_SMC: uM {pub: in};
    var Ca_in_SMC0: uM {pub: in};
    // var Ca_in_SMC_dig: uM {pub: in};
    var Ca_SR: uM {pub: in};
    var Ca_SR0: uM {pub: in};
    var Ca_t: uM {pub: in};
    var I_ca: uA_per_cmsq {pub: in};
    var J_release: uM_per_sec {pub: in};
    var rate1: uM_per_sec {pub: in};
    var rate_SR: uM_per_sec {pub: in};
    var rate_m: uM_per_sec {pub: in};
    var rate_m0: uM_per_sec {pub: in};
    var J_serca: uM_per_sec {pub: in};
    var J_in: uM_per_sec {pub: in};
    var J_pm: uM_per_sec {pub: in};
    // var k_mlcpb: per_sec {pub: in};
    // var k_mlcpc: per_sec {pub: in};
    // var k_mlcpm: uM {pub: in};
    var m: dimensionless {pub: in};
    var P: dimensionless {pub: in};
    var p_agonist: uM {pub: in};
    var P_ipr: dimensionless {pub: in};
    var P_RyR: dimensionless {pub: in};
    var V_ca: mV {pub: in};
    var V: vmV {pub: in};
    // var t_ago1: second {pub: in};
    // var p_ago1: uM {pub: in};
    var V0: mV {pub: in};
    var V1: mV {pub: in};
    var t1_KCL: second {pub: in};
    var t2_KCL: second {pub: in};
    var Ca_E: uM {pub: in};
    var y: dimensionless {pub: in};
    var y0: dimensionless {pub: in};
    var phi1: per_sec {pub: in};
    var phi2: per_sec {pub: in};
    var l_1: per_uM_per_sec {pub: in};
    var l_2: per_uM_per_sec {pub: in};
    var l_3: per_uM_per_sec {pub: in};
    var l_4: per_uM_per_sec {pub: in};
    var l_5: per_uM_per_sec {pub: in};
    var l_m1: per_sec {pub: in};
    var l_m2: per_sec {pub: in};
    var l_m3: per_sec {pub: in};
    var l_m4: per_sec {pub: in};
    var l_m5: per_sec {pub: in};
    var L1: uM {pub: in};
    var L2: uM {pub: in};
    var L3: uM {pub: in};
    var L4: uM {pub: in};
    var L5: uM {pub: in};
    var k_ryr0: dimensionless {pub: in};
    var k_ryr1: dimensionless {pub: in};
    var k_ryr2: uM {pub: in};
    var k_ryr3: uM {pub: in};
    var delta_SMC: dimensionless {pub: in};
    var delta2: dimensionless {pub: in};
    var k_ipr: per_sec {pub: in};
    var k_RyR: per_sec {pub: in};
    var Vm: mV {pub: in};
    var km: mV {pub: in};
    var gca: nS_per_uM {pub: in};
    var F: C_per_mol {pub: in};
    var R: mJ_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var alpha0: uM_per_sec {pub: in};
    var alpha1: dimensionless {pub: in};
    var alpha2: per_sec {pub: in};
    var Jer: per_sec {pub: in};
    var Ve: uM_per_sec {pub: in};
    var Ke: uM {pub: in};
    var Vp: uM_per_sec {pub: in};
    var Kp: uM {pub: in};
    var gamma: dimensionless {pub: in};
    var Ca_dSR: uM;
    var ne: dimensionless {pub: in};
    var np: dimensionless {pub: in};
    var nc: dimensionless {pub: in};
    var ns: dimensionless {pub: in};
    var ns0: dimensionless {pub: in};
    Ca_dSR = (27.5{uM}-Ca_SR)/Ca_in_SMC-0.05{uM};
  enddef;

  def comp NO_sGC as
    var cGMP_EC: uM {pub: in};
    // var cGMP_SMC: uM {pub: in};
    //  var E5c: dimensionless {pub: in};
    //  var E6c: dimensionless {pub: in};
    //  var Eb: dimensionless {pub: in};
    var eNOS_CaM: uM {pub: in};
    var eNOS_CaM_star: uM {pub: in};
    // var h_four: per_sec {pub: in};
    var J_dif: uM_per_sec {pub: out};
    // var J_no: uM_per_sec {pub: in};
    var k_dif: uM_per_sec {init: 0.1};
    // var Km_pde: uM {pub: in};
    // var K_pde: per_sec {pub: in};
    // var n_mlcph: dimensionless {pub: in};
    var NO_EC: uM {pub: in};
    // var NO_SMC: uM {pub: in};
    var Q_sGC: uM_per_sec {pub: in};
    var Q_NO: uM_per_sec {pub: in};
    var Q_RBC: uM_per_sec {pub: in};
    var NO_rate: uM_per_sec {pub: in};
    // var vd: uM_per_sec {pub: in};
    // var vp: uM_per_sec {pub: in};
    // Parameter values copied from NO_cGMp_signalling_SMC.cellml file, SGC_SMC component............. starts....
    var Eb: dimensionless {pub: in};
    // var Eb: dimensionless {pub: out};
    var E6c: dimensionless {pub: in};
    var E6c0: dimensionless {init: 0, pub: out};
    var E5c: dimensionless {pub: in};
    var E5c0: dimensionless {init: 0, pub: out};
    var NO_SMC: uM {pub: in};
    var NO_SMC0: uM {init: 0, pub: out};
    var h_one: per_uM_per_sec {init: 2000, pub: out};
    var hm1: per_sec {init: 100, pub: out};
    var h_two: per_sec {init: 0.1, pub: out};
    var h_three: per_uM_per_sec {init: 3, pub: out};
    var h_four: per_sec {pub: in};
    var cGMP_SMC: uM {pub: in};
    var cGMP_SMC0: uM {init: 0, pub: out};
    var vd: uM_per_sec {pub: in};
    var vp: uM_per_sec {pub: in};
    var Vm_sgc: uM_per_sec {init: 0.852, pub: out};
    var Km_pde: uM {init: 2, pub: out};
    var K_pde: per_sec {init: 0.0195, pub: out};
    var k_dno: per_sec {init: 0.01, pub: out};
    var J_no: uM_per_sec {init: 0.003, pub: out};
    var m: dimensionless {init: 2, pub: out};
    var H_four: per_sec {init: 0.011, pub: out};
    var k_mlcpb: per_sec {init: 0.0086, pub: out};
    // init: 0.0086,
    var k_mlcpc: per_sec {init: 0.5, pub: out};
    // init: 0.0327
    var k_mlcpm: uM {init: 5.5, pub: out};
    var n_mlcph: dimensionless {init: 2, pub: out};
    // var k2y: per_sec {pub: in};
    // k2y=k_mlcp in Yang et al. (2005)
    // Parameter values copied from NO_cGMp_signalling_SMC.cellml file, SGC_SMC component............. Ends....
    J_dif = k_dif*(NO_EC-NO_SMC);
  enddef;

  def comp kay2 as
    var time: second {pub: in};
    var k1a: per_sec {pub: in};
    var k1b: per_sec {pub: in};
    var k2: per_sec {pub: out};
    var k2y: per_sec {pub: in};
    var k2h: per_sec {pub: in};
    var k3: first_order_rate_constant {init: 0.88, pub: out};
    var k_dno: per_sec {pub: in};
    var k2b: per_sec {pub: in};
    var kon: dimensionless {pub: in};
    var koff: per_sec {pub: in};
    var kon1: dimensionless {pub: in};
    var kon2: uM {pub: in};
    var koff1: per_sec {pub: in};
    var koff2: per_sec {pub: in};
    var tp: second {pub: in};
    var mm: dimensionless {init: 1};
    var k2i: per_sec {pub: out};
    var k2hi: per_sec {pub: in};
    k2 = (k2h+k2y)/mm;
    k2i = (k2hi+k2y)/mm;
  enddef;

  def comp M as
    var AM: dimensionless {pub: in};
    var M: dimensionless {init: 1, pub: out};
    var Mp: dimensionless {pub: in};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k7: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(M, time) = -k1*M+k2*Mp+k7*AM;
  enddef;

  def comp Mp as
    var AMp: dimensionless {pub: in};
    var Mp: dimensionless {init: 0, pub: out};
    var M: dimensionless {pub: in};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k3: first_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Mp, time) = k4*AMp+k1*M-(k2+k3)*Mp;
  enddef;

  def comp AM as
    var AM: dimensionless {init: 0, pub: out};
    var AMp: dimensionless {pub: in};
    var k5: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var k7: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(AM, time) = k5*AMp-(k6+k7)*AM;
  enddef;

  def comp AMp as
    var M: dimensionless {pub: in};
    var AM: dimensionless {pub: in};
    var AMp: dimensionless {pub: out};
    var Mp: dimensionless {pub: in};
    AMp = 1{dimensionless}-(M+AM+Mp);
  enddef;
  // Start: Added isolated stress model using experimental Cai data...........................................

  def comp Mi as
    var AMi: dimensionless {pub: in};
    var Mi: dimensionless {init: 1, pub: out};
    var Mpi: dimensionless {pub: in};
    var k1i: first_order_rate_constant {pub: in};
    var k2i: first_order_rate_constant {pub: in};
    var k7: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Mi, time) = -k1i*Mi+k2i*Mpi+k7*AMi;
  enddef;

  def comp Mpi as
    var AMpi: dimensionless {pub: in};
    var Mpi: dimensionless {init: 0, pub: out};
    var Mi: dimensionless {pub: in};
    var k1i: first_order_rate_constant {pub: in};
    var k2i: first_order_rate_constant {pub: in};
    var k3: first_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Mpi, time) = k4*AMpi+k1i*Mi-(k2i+k3)*Mpi;
  enddef;

  def comp AMi as
    var AMi: dimensionless {init: 0, pub: out};
    var AMpi: dimensionless {pub: in};
    var k5i: first_order_rate_constant {pub: in};
    var k6i: first_order_rate_constant {pub: in};
    var k7: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(AMi, time) = k5i*AMpi-(k6i+k7)*AMi;
  enddef;

  def comp AMpi as
    var Mi: dimensionless {pub: in};
    var AMi: dimensionless {pub: in};
    var AMpi: dimensionless {pub: out};
    var Mpi: dimensionless {pub: in};
    AMpi = 1{dimensionless}-(Mi+AMi+Mpi);
  enddef;
  // / End: Added isolated stress model using experimental Cai data.....................................

  def comp phosphorylation as
    var AMp: dimensionless {pub: in};
    var Mp: dimensionless {pub: in};
    var phosphorylation: dimensionless;
    var AMpi: dimensionless {pub: in};
    var Mpi: dimensionless {pub: in};
    var phosphorylationi: dimensionless;
    phosphorylation = AMp+Mp;
    phosphorylationi = AMpi+Mpi;
  enddef;

  def comp stress as
    var AMp: dimensionless {pub: in};
    var AM: dimensionless {pub: in};
    var stress_Index: dimensionless;
    var stress: dimensionless;
    var Max_stress: dimensionless {init: 2.06};
    var stress_dig: dimensionless {pub: in};
    var sqr_dif_stress: dimensionless;
    var stress_d: dimensionless {init: 0, pub: out};
    var time: second {pub: in};
    var AMpi: dimensionless {pub: in};
    var AMi: dimensionless {pub: in};
    var stress_Indexi: dimensionless;
    var stressi: dimensionless;
    // var stress_d2: dimensionless {pub: out};
    ode(stress_d, time) = sqr(stress_dig*1{per_uM}-stress*1{per_uM})*1{per_sec};
    // stress_d2 = sel
    //     case (time >= 266{second}) and (time < 2060{second}):
    //         stress_d;
    //     otherwise:
    //         0{dimensionless};
    // endsel;
    stress_Index = AMp+AM;
    stress = (AMp+AM)*Max_stress;
    sqr_dif_stress = sqr(stress_dig-stress);
    stress_Indexi = AMpi+AMi;
    stressi = (AMpi+AMi)*Max_stress;
  enddef;

  def comp stress_dig as
    var stress_dig: dimensionless {pub: out};
    var time: second {pub: in};
    var stress_exp0: dimensionless;
    var tb: second {pub: in};
    stress_dig = sel
      case (time >= 0{second}) and (time < 266{second}):
        0.06181{dimensionless};
      case (time >= 266{second}) and (time < 319.5{second}):
        -0.000410301{dimensionless}*sqr(time*1{per_sec}-319.5{dimensionless})+1.236203{dimensionless};
      case (time >= 319.5{second}) and (time < 380{second}):
        -0.0000506596{dimensionless}*sqr(time*1{per_sec}-380{dimensionless})+1.42163{dimensionless};
      case (time >= 380{second}) and (time < 500.5{second}):
        -0.000001824627{dimensionless}*sqr(time*1{per_sec}-500.5{dimensionless})+1.448124{dimensionless};
      case (time >= 500.5{second}) and (time < 2060{second}):
        0.0000629346{dimensionless}*(time*1{per_sec}-500.5{dimensionless})+1.448124{dimensionless};
      otherwise:
        0.06181{uM};
    endsel;
    stress_exp0 = sel
      case (time >= 0{second}) and (time < 3{second}):
        0.058691046{uM};
      case (time >= tb+0{second}) and (time < tb+3{second}):
        0.058691046{uM};
      case (time >= tb+5{second}) and (time < tb+8{second}):
        00.261851285{uM};
      case (time >= tb+15{second}) and (time < tb+18{second}):
        0.49209966{uM};
      case (time >= tb+26{second}) and (time < tb+29{second}):
        0.704289105{uM};
      case (time >= tb+37{second}) and (time < tb+40{second}):
        0.898420139{uM};
      case (time >= tb+48{second}) and (time < tb+51{second}):
        1.079007018{uM};
      case (time >= tb+58{second}) and (time < tb+61{second}):
        1.237020538{uM};
      case (time >= tb+74{second}) and (time < tb+77{second}):
        1.313769824{uM};
      case (time >= tb+91{second}) and (time < tb+94{second}):
        1.3769753{uM};
      case (time >= tb+123{second}) and (time < tb+126{second}):
        1.42212202{uM};
      case (time >= tb+185{second}) and (time < tb+188{second}):
        1.44469538{uM};
      case (time >= tb+248{second}) and (time < tb+251{second}):
        1.449209897{uM};
      case (time >= tb+312{second}) and (time < tb+315{second}):
        1.453724759{uM};
      case (time >= tb+636{second}) and (time < tb+639{second}):
        1.485327411{uM};
      case (time >= tb+1282{second}) and (time < tb+1285{second}):
        1.525959528{uM};
      case (time >= tb+1932{second}) and (time < tb+1935{second}):
        1.553018198{uM};
    endsel;
    // I should fix time period lated from 266-2060 to 0-1794
  enddef;

  def comp model_parameters1 as
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k5: first_order_rate_constant {pub: out};
    var k6: first_order_rate_constant {pub: out};
    var k4: first_order_rate_constant {init: 0.22, pub: out};
    var k7: first_order_rate_constant {init: 0.0003, pub: out};
    // var k12: first_order_rate_constant;
    // init:0.0003
    // var k7: first_order_rate_constant {pub: out};
    // init: 0.03,
    var kca: dimensionless {init: 2, pub: out};
    var time: second {pub: in};
    var P: dimensionless {pub: in};
    var k1i: first_order_rate_constant {pub: in};
    var k2i: first_order_rate_constant {pub: in};
    var k5i: first_order_rate_constant {pub: out};
    var k6i: first_order_rate_constant {pub: out};
    // var Pi: dimensionless {pub: in};
    // var b: dimensionless {init: 4};
    // var k12: dimensionless;
    // var k7min: dimensionless {init: 0.0001};
    // var k7max: dimensionless {init: 0.003};
    // var alpha7: dimensionless {init: 1e-06};
    // k7 = k12;
    // k12 = k7min+alpha7*(k7max-k7min)/(alpha7+k1*1{second}/(k2*1{second}+0.000000000000001{dimensionless}));
    // k7 = sqr(k1)/(k2+0.000000000000001{dimensionless});
    k6 = k1;
    k5 = k2;
    k6i = k1i;
    k5i = k2i;
  enddef;

  def comp EC_par as
    var cc: dimensionless {init: 1, pub: out};
    var a_0: uM2 {pub: in};
    var a_1: uM {pub: in};
    var AKT_star: uM {pub: in};
    var AKT_tot: uM {pub: in};
    var alpha: per_sec {pub: in};
    var a_PI3K: dimensionless {pub: in};
    var b_0: dimensionless {pub: in};
    var b_1: uM {pub: in};
    var B_tot: uM {pub: in};
    var beta: dimensionless {pub: in};
    var Ca_c: uM {pub: in};
    var Ca_c0: uM {pub: in};
    var Ca_c1: uM {pub: in};
    var Ca_b: uM {pub: in};
    var Ca_e: uM {pub: in};
    var Ca_s0: uM {pub: in};
    var Ca_s: uM {pub: in};
    var Ca4_CaM: uM {pub: in};
    var CaM_tot: uM {pub: in};
    var cGMP_EC: uM {pub: in};
    var delta: dimensionless {pub: in};
    var eNOS_CaM: uM {pub: in};
    var eNOS_CaM_star: uM {pub: in};
    var eNOS_Cav: uM {pub: in};
    var eNOS_Cav_0: uM {pub: in};
    var eNOS_tot: uM {pub: in};
    var eta: per_sec {pub: in};
    var G: uM {pub: in};
    var g_0: uM2 {pub: in};
    var g_1: uM {pub: in};
    var Gt: uM {pub: in};
    var IP3: uM {pub: in};
    var k_1p: per_sec {pub: in};
    var k_2: uM {pub: in};
    var k_2p: per_sec {pub: in};
    var k_3: uM {pub: in};
    var k_5: uM {pub: in};
    var k_a: per_sec {pub: in};
    var k_AKT_negative: per_sec {pub: in};
    var k_AKT_positive: per_sec {pub: in};
    var k_Ca4_CaM: per_sec {pub: in};
    var k_CaM_negative: per_sec {pub: in};
    var k_CaM_positive: per_sec {pub: in};
    var k_CCE: per_sec {pub: in};
    var k_cGMP: uM {pub: in};
    var K_cp: per_uM {pub: in};
    var k_d: per_sec {pub: in};
    var k_dCaM: dimensionless {pub: in};
    var k_eAKT_max: per_sec {pub: in};
    var k_eAKT_negative: per_sec {pub: in};
    var k_eAKT_positive: per_sec {pub: in};
    var k_half_CaM: uM {pub: in};
    var k_leak: per_uM_per_sec {pub: in};
    var k_mNO: uM {pub: in};
    var k_off: per_sec {pub: in};
    var k_on: per_uM_per_sec {pub: in};
    var k_out: uM_per_sec {pub: in};
    var k_PIP2_negative: per_sec {pub: in};
    var k_PIP2_positive: per_sec {pub: in};
    var k_PKC_negative: per_sec {pub: in};
    var k_PKC_positive: per_sec {pub: in};
    var k_rel: per_sec {pub: in};
    var k_res: uM_per_sec {pub: in};
    var k_Thr_negative: per_sec {pub: in};
    var k_Thr_positive: per_sec {pub: in};
    var lambda: dimensionless {pub: in};
    var lambda_NO: per_sec {pub: in};
    var m_1: per_uM {pub: in};
    var M_ATP: dimensionless {pub: in};
    var mu1: per_sec {pub: in};
    var N: dimensionless {pub: in};
    var NO_EC: uM {pub: in};
    var NO_EC0: uM {pub: in};
    // var O2: uM {pub: in};
    var Phi: dimensionless {pub: in};
    var PIP2: uM {pub: in};
    var PIP3: uM {pub: in};
    var PIP3_max: uM {pub: in};
    var PIP3_min: uM {pub: in};
    var PIP2_tot: uM {pub: in};
    var PKC_star: uM {pub: in};
    var PKC_tot: uM {pub: in};
    var psi: per_uM {pub: in};
    var q_CCE: uM_per_sec {pub: in};
    var q_in: uM_per_sec {pub: in};
    var q_max: uM_per_sec {pub: in};
    var q_MSIC: uM_per_sec {pub: in};
    var Q_NO: uM_per_sec {pub: in};
    var q_out: uM_per_sec {pub: in};
    var q_rel: uM_per_sec {pub: in};
    var q_res: uM_per_sec {pub: in};
    var Q_sGC: uM_per_sec {pub: in};
    var Q_RBC: uM_per_sec {pub: in};
    var NO_rate: uM_per_sec {pub: in};
    var r: per_sec {pub: in};
    var r_f: per_sec {pub: in};
    var R_NO_max: per_sec {pub: in};
    var r_r: per_sec {pub: in};
    var R_star: dimensionless {pub: in};
    var sGC: uM {pub: in};
    var theta: dimensionless {pub: in};
    var v_cGMP_max: uM_per_sec {pub: in};
    var v_r: dimensionless {pub: in};
    var W: dimensionless {pub: in};
    var W_0: dimensionless {pub: in};
    var X: per_sec {pub: in};
    var xi: per_uM2 {pub: in};
    var Z: dimensionless {pub: in};
  enddef;
  def map between NO_sGC and sGC_SMC for
    vars Eb and Eb;
    vars E5c and E5c;
    vars E5c0 and E5c0;
    vars E6c and E6c;
    vars E6c0 and E6c0;
    vars NO_SMC and NO_SMC;
    vars NO_SMC0 and NO_SMC0;
    vars h_one and h_one;
    vars hm1 and hm1;
    vars h_two and h_two;
    vars h_three and h_three;
    vars h_four and h_four;
    vars cGMP_SMC and cGMP_SMC;
    vars cGMP_SMC0 and cGMP_SMC0;
    vars vd and vd;
    vars vp and vp;
    vars Vm_sgc and Vm_sgc;
    vars Km_pde and Km_pde;
    vars K_pde and K_pde;
    vars k_dno and k_dno;
    vars J_no and J_no;
    vars m and m;
    vars J_dif and J_dif;
    vars H_four and H_four;
    vars k_mlcpb and k_mlcpb;
    vars k_mlcpc and k_mlcpc;
    vars k_mlcpm and k_mlcpm;
    vars n_mlcph and n_mlcph;
  enddef;
  def map between asm_ca and calcium for
    vars Ca_in_SMC and Ca_in_SMC;
    vars p_agonist and p_agonist;
    vars Ca_in_SMC_dig and Ca_in_SMC_dig;
    // vars Ca_in_SMC2 and Ca_in_SMC2;
  enddef;
  def map between asm_ca and SMC_Par for
    vars Ca_in_SMC and Ca_in_SMC;
    vars Ca_in_SMC0 and Ca_in_SMC0;
    // vars Ca_in_SMC_dig and Ca_in_SMC_dig;
    vars Ca_SR and Ca_SR;
    vars Ca_SR0 and Ca_SR0;
    vars Ca_t and Ca_t;
    vars p_agonist and p_agonist;
    vars J_release and J_release;
    vars rate1 and rate1;
    vars rate_SR and rate_SR;
    vars rate_m and rate_m;
    vars rate_m0 and rate_m0;
    vars J_serca and J_serca;
    vars J_in and J_in;
    vars J_pm and J_pm;
    vars m and m;
    vars V_ca and V_ca;
    vars P_ipr and P_ipr;
    vars P_RyR and P_RyR;
    vars I_ca and I_ca;
    vars V and V;
    //  vars t_ago1 and t_ago1;
    // vars p_ago1 and p_ago1;
    vars V0 and V0;
    vars V1 and V1;
    vars t1_KCL and t1_KCL;
    vars t2_KCL and t2_KCL;
    vars Ca_E and Ca_E;
    vars y and y;
    vars y0 and y0;
    vars phi1 and phi1;
    vars phi2 and phi2;
    vars L1 and L1;
    vars L2 and L2;
    vars L3 and L3;
    vars L4 and L4;
    vars L5 and L5;
    vars ne and ne;
    vars np and np;
    vars nc and nc;
    vars ns and ns;
    vars ns0 and ns0;
    // vars ca_in_rate and ca_in_rate;
    // vars ca_in_rate1 and ca_in_rate1;
    // vars ca_in_rate2 and ca_in_rate2;
  enddef;
  def map between SMC_Par and ca_parameters for
    vars l_1 and l_1;
    vars l_2 and l_2;
    vars l_3 and l_3;
    vars l_4 and l_4;
    vars l_5 and l_5;
    vars l_m1 and l_m1;
    vars l_m2 and l_m2;
    vars l_m3 and l_m3;
    vars l_m4 and l_m4;
    vars l_m5 and l_m5;
    vars k_ryr0 and k_ryr0;
    vars k_ryr1 and k_ryr1;
    vars k_ryr2 and k_ryr2;
    vars k_ryr3 and k_ryr3;
    vars delta_SMC and delta_SMC;
    vars delta2 and delta2;
    vars k_ipr and k_ipr;
    vars k_RyR and k_RyR;
    vars Vm and Vm;
    vars km and km;
    vars gca and gca;
    vars F and F;
    vars R and R;
    vars T and T;
    vars alpha0 and alpha0;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars Jer and Jer;
    vars Ve and Ve;
    vars Ke and Ke;
    vars Vp and Vp;
    vars Kp and Kp;
    vars gamma and gamma;
  enddef;
  def map between calcium and model_parameters1 for
    vars k1 and k1;
    vars P and P;
  enddef;
  def map between kay2 and model_parameters1 for
    vars k2 and k2;
  enddef;
  def map between sGC_SMC and kay2 for
    vars k2y and k2y;
    vars k_dno and k_dno;
  enddef;
  def map between sGC_SMC and calcium for
    vars k2y and k2y;
  enddef;
  def map between SMC_Par and calcium for
    vars P and P;
  enddef;
  // def map between SMC_Par and sGC_SMC for
  //     vars k_mlcpb and k_mlcpb;
  //      vars k_mlcpc and k_mlcpc;
  //      vars k_mlcpm and k_mlcpm;
  //  enddef;
  def map between calcium and kay2 for
    vars k2h and k2h;
    vars k1a and k1a;
    vars k1b and k1b;
    vars k2b and k2b;
    vars kon and kon;
    vars kon1 and kon1;
    vars kon2 and kon2;
    vars koff and koff;
    vars koff1 and koff1;
    vars koff2 and koff2;
    vars tp and tp;
    vars k2hi and k2hi;
  enddef;
  def map between stress and Environment for
    vars time and time;
  enddef;
  def map between M and Environment for
    vars time and time;
  enddef;
  def map between Mp and Environment for
    vars time and time;
  enddef;
  def map between AM and Environment for
    vars time and time;
  enddef;
  def map between Environment and calcium for
    vars time and time;
  enddef;
  def map between Environment and asm_ca for
    vars time and time;
  enddef;
  def map between Environment and sGC_SMC for
    vars time and time;
  enddef;
  def map between Environment and stress_dig for
    vars time and time;
  enddef;
  def map between asm_ca and stress_dig for
    vars tb and tb;
  enddef;
  def map between M and model_parameters1 for
    vars k7 and k7;
    vars k1 and k1;
  enddef;
  def map between M and kay2 for
    vars k2 and k2;
  enddef;
  def map between Mp and model_parameters1 for
    vars k4 and k4;
    vars k1 and k1;
  enddef;
  def map between Mp and kay2 for
    vars k2 and k2;
    vars k3 and k3;
  enddef;
  def map between AM and model_parameters1 for
    vars k5 and k5;
    vars k6 and k6;
    vars k7 and k7;
  enddef;
  def map between AM and M for
    vars AM and AM;
  enddef;
  def map between AM and AMp for
    vars AMp and AMp;
    vars AM and AM;
  enddef;
  def map between M and Mp for
    vars M and M;
    vars Mp and Mp;
  enddef;
  def map between Mp and AMp for
    vars Mp and Mp;
    vars AMp and AMp;
  enddef;
  def map between M and AMp for
    vars M and M;
  enddef;
  def map between phosphorylation and AMp for
    vars AMp and AMp;
  enddef;
  def map between phosphorylation and Mp for
    vars Mp and Mp;
  enddef;
  def map between stress and AMp for
    vars AMp and AMp;
  enddef;
  def map between stress and AM for
    vars AM and AM;
  enddef;
  def map between Environment and Activation_of_G_proteins for
    vars time and time;
    vars tau and tau;
  enddef;
  def map between Environment and Calcium_signalling for
    vars time and time;
    vars tau and tau;
  enddef;
  def map between Environment and Activation_of_protein_kinases for
    vars time and time;
    vars tau and tau;
  enddef;
  def map between Environment and Phosphorylation_and_formation_of_eNOS_complexes for
    vars time and time;
  enddef;
  def map between Environment and NO_production for
    vars time and time;
  enddef;
  def map between Activation_of_G_proteins and Calcium_signalling for
    vars IP3 and IP3;
  enddef;
  def map between NO_production and Calcium_signalling for
    vars cGMP_EC and cGMP_EC;
  enddef;
  def map between Activation_of_G_proteins and Activation_of_protein_kinases for
    vars k_PIP2_positive and k_PIP2_positive;
    vars PIP3 and PIP3;
    vars PIP2_tot and PIP2_tot;
  enddef;
  def map between Phosphorylation_and_formation_of_eNOS_complexes and NO_production for
    vars eNOS_CaM and eNOS_CaM;
    vars eNOS_CaM_star and eNOS_CaM_star;
  enddef;
  def map between Phosphorylation_and_formation_of_eNOS_complexes and Calcium_signalling for
    vars Ca_c and Ca_c;
  enddef;
  def map between Phosphorylation_and_formation_of_eNOS_complexes and Activation_of_protein_kinases for
    vars AKT_star and AKT_star;
    vars AKT_tot and AKT_tot;
    vars PKC_tot and PKC_tot;
    vars PKC_star and PKC_star;
  enddef;
  def map between NO_sGC and NO_production for
    vars NO_EC and NO_EC;
    vars Q_NO and Q_NO;
    vars Q_sGC and Q_sGC;
    vars Q_RBC and Q_RBC;
    vars NO_rate and NO_rate;
    vars J_dif and J_dif;
    vars cGMP_EC and cGMP_EC;
  enddef;
  def map between Phosphorylation_and_formation_of_eNOS_complexes and NO_sGC for
    vars eNOS_CaM and eNOS_CaM;
    vars eNOS_CaM_star and eNOS_CaM_star;
  enddef;
  def map between Activation_of_G_proteins and EC_par for
    vars G and G;
    vars k_a and k_a;
    vars R_star and R_star;
    vars Gt and Gt;
    vars k_d and k_d;
    vars lambda and lambda;
    vars IP3 and IP3;
    vars r_f and r_f;
    vars PIP2 and PIP2;
    vars mu1 and mu1;
    vars alpha and alpha;
    vars K_cp and K_cp;
    vars M_ATP and M_ATP;
    vars r_r and r_r;
    vars k_PIP2_positive and k_PIP2_positive;
    vars k_PIP2_negative and k_PIP2_negative;
    vars PIP3 and PIP3;
  enddef;
  def map between Calcium_signalling and EC_par for
    vars cc and cc;
    vars Ca_c0 and Ca_c0;
    vars Ca_c1 and Ca_c1;
    vars Ca_c and Ca_c;
    vars Ca_b and Ca_b;
    vars Ca_s and Ca_s;
    vars q_rel and q_rel;
    vars q_res and q_res;
    vars q_out and q_out;
    vars q_in and q_in;
    vars k_leak and k_leak;
    vars v_r and v_r;
    vars k_rel and k_rel;
    vars k_2 and k_2;
    vars k_res and k_res;
    vars k_3 and k_3;
    vars k_out and k_out;
    vars k_5 and k_5;
    vars q_MSIC and q_MSIC;
    vars q_CCE and q_CCE;
    vars q_max and q_max;
    vars N and N;
    vars W and W;
    vars Z and Z;
    vars W_0 and W_0;
    vars k_CCE and k_CCE;
    vars Ca_s0 and Ca_s0;
    vars Ca_e and Ca_e;
    vars psi and psi;
    vars xi and xi;
    vars k_on and k_on;
    vars k_off and k_off;
    vars B_tot and B_tot;
  enddef;
  def map between Activation_of_protein_kinases and EC_par for
    vars a_PI3K and a_PI3K;
    vars delta and delta;
    vars eta and eta;
    vars k_1p and k_1p;
    vars k_2p and k_2p;
    vars AKT_star and AKT_star;
    vars AKT_tot and AKT_tot;
    vars PKC_tot and PKC_tot;
    vars PKC_star and PKC_star;
    vars k_AKT_positive and k_AKT_positive;
    vars k_PKC_positive and k_PKC_positive;
    vars k_AKT_negative and k_AKT_negative;
    vars k_PKC_negative and k_PKC_negative;
    vars PIP3_min and PIP3_min;
    vars PIP3_max and PIP3_max;
    vars PIP2_tot and PIP2_tot;
  enddef;
  def map between Phosphorylation_and_formation_of_eNOS_complexes and EC_par for
    vars Ca4_CaM and Ca4_CaM;
    vars k_Ca4_CaM and k_Ca4_CaM;
    vars theta and theta;
    vars beta and beta;
    vars CaM_tot and CaM_tot;
    vars k_dCaM and k_dCaM;
    vars eNOS_CaM and eNOS_CaM;
    vars eNOS_CaM_star and eNOS_CaM_star;
    vars k_CaM_positive and k_CaM_positive;
    vars k_CaM_negative and k_CaM_negative;
    vars k_half_CaM and k_half_CaM;
    vars eNOS_Cav and eNOS_Cav;
    vars eNOS_tot and eNOS_tot;
    vars k_eAKT_positive and k_eAKT_positive;
    vars k_eAKT_negative and k_eAKT_negative;
    vars k_eAKT_max and k_eAKT_max;
    vars k_Thr_positive and k_Thr_positive;
    vars k_Thr_negative and k_Thr_negative;
    vars eNOS_Cav_0 and eNOS_Cav_0;
    vars m_1 and m_1;
  enddef;
  def map between NO_production and EC_par for
    vars NO_EC and NO_EC;
    vars NO_EC0 and NO_EC0;
    vars Q_NO and Q_NO;
    // vars O2 and O2;
    vars k_mNO and k_mNO;
    vars eNOS_CaM and eNOS_CaM;
    vars eNOS_CaM_star and eNOS_CaM_star;
    vars Phi and Phi;
    vars Q_sGC and Q_sGC;
    vars Q_RBC and Q_RBC;
    vars NO_rate and NO_rate;
    vars sGC and sGC;
    vars R_NO_max and R_NO_max;
    vars a_0 and a_0;
    vars a_1 and a_1;
    vars cGMP_EC and cGMP_EC;
    vars v_cGMP_max and v_cGMP_max;
    vars g_0 and g_0;
    vars g_1 and g_1;
    vars X and X;
    vars k_cGMP and k_cGMP;
    vars r and r;
    vars b_0 and b_0;
    vars b_1 and b_1;
    vars lambda_NO and lambda_NO;
  enddef;
  def map between Environment and kay2 for
    vars time and time;
  enddef;
  def map between Environment and model_parameters1 for
    vars time and time;
  enddef;
  def map between stress and stress_dig for
    vars stress_dig and stress_dig;
  enddef;
  // starts ...............................................................................
  def map between calcium and model_parameters1 for
    vars k1i and k1i;
  enddef;
  def map between kay2 and model_parameters1 for
    vars k2i and k2i;
  enddef;
  def map between Mi and Environment for
    vars time and time;
  enddef;
  def map between Mpi and Environment for
    vars time and time;
  enddef;
  def map between AMi and Environment for
    vars time and time;
  enddef;
  def map between Mi and model_parameters1 for
    vars k7 and k7;
  enddef;
  def map between Mi and calcium for
    vars k1i and k1i;
  enddef;
  def map between Mi and kay2 for
    vars k2i and k2i;
  enddef;
  def map between Mpi and model_parameters1 for
    vars k4 and k4;
  enddef;
  def map between Mpi and calcium for
    vars k1i and k1i;
  enddef;
  def map between Mpi and kay2 for
    vars k2i and k2i;
    vars k3 and k3;
  enddef;
  def map between AMi and model_parameters1 for
    vars k5i and k5i;
    vars k6i and k6i;
    vars k7 and k7;
  enddef;
  def map between AMi and Mi for
    vars AMi and AMi;
  enddef;
  def map between AMi and AMpi for
    vars AMpi and AMpi;
    vars AMi and AMi;
  enddef;
  def map between Mi and Mpi for
    vars Mi and Mi;
    vars Mpi and Mpi;
  enddef;
  def map between Mpi and AMpi for
    vars Mpi and Mpi;
    vars AMpi and AMpi;
  enddef;
  def map between Mi and AMpi for
    vars Mi and Mi;
  enddef;
  def map between phosphorylation and AMpi for
    vars AMpi and AMpi;
  enddef;
  def map between phosphorylation and Mpi for
    vars Mpi and Mpi;
  enddef;
  def map between stress and AMpi for
    vars AMpi and AMpi;
  enddef;
  def map between stress and AMi for
    vars AMi and AMi;
  enddef;
  // Ends...............................................................................
  // start of SMC_calcium_file_$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$
  // Ca_Model
  def map between ca_parameters and asm_ca for
    vars l_1 and l_1;
    vars l_2 and l_2;
    vars l_3 and l_3;
    vars l_4 and l_4;
    vars l_5 and l_5;
    vars l_m1 and l_m1;
    vars l_m2 and l_m2;
    vars l_m3 and l_m3;
    vars l_m4 and l_m4;
    vars l_m5 and l_m5;
    vars gamma and gamma;
    vars delta_SMC and delta_SMC;
    vars delta2 and delta2;
    vars F and F;
    vars R and R;
    vars T and T;
    vars alpha0 and alpha0;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars k_ipr and k_ipr;
    vars k_RyR and k_RyR;
    vars Jer and Jer;
    vars k_ryr0 and k_ryr0;
    vars k_ryr1 and k_ryr1;
    vars k_ryr2 and k_ryr2;
    vars k_ryr3 and k_ryr3;
    vars Ve and Ve;
    vars Ke and Ke;
    vars Vp and Vp;
    vars Kp and Kp;
    vars gca and gca;
    vars Vm and Vm;
    vars km and km;
  enddef;
  // End of SMC_calcium_file_$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$
enddef;
