def model SMC_Ca as

  def comp ca_parameters as
    var l_1: per_uM_per_sec {init: 2000, pub: out};
    var l_2: per_uM_per_sec {init: 1, pub: out};
    var l_3: per_uM_per_sec {init: 2000, pub: out};
    var l_4: per_uM_per_sec {init: 1, pub: out};
    var l_5: per_uM_per_sec {init: 100, pub: out};
    var l_m1: per_sec {init: 260, pub: out};
    var l_m2: per_sec {init: 1.05, pub: out};
    var l_m3: per_sec {init: 1886, pub: out};
    var l_m4: per_sec {init: 0.145, pub: out};
    var l_m5: per_sec {init: 8.2, pub: out};
    var k_ryr0: dimensionless {init: 0.0072, pub: out};
    // init: 1.912484628  // 0.0072
    var k_ryr1: dimensionless {init: 0.334, pub: out};
    // init: 0.22934991  // 0.334
    var k_ryr2: uM {init: 0.5, pub: out};
    // init: 21.21932599  // 0.5
    var k_ryr3: uM {init: 38, pub: out};
    // init: 38.31557078  // 38
    var k_ipr: per_sec {init: 5.55, pub: out};
    var k_RyR: per_sec {init: 5, pub: out};
    // init: 4.569088024  // 5.0
    var Vm: mV {init: -50, pub: out};
    // init: -50.33745033  //  -50
    var km: mV {init: 6, pub: out};
    // init: 16.64435804  // 12
    var gca: nS_per_uM {init: 8.1, pub: out};
    // nit: 42
    // var gca: nS_per_uM {init: 27, pub: out};
    // init: 30.90642505   // 16
    var F: C_per_mol {init: 96485, pub: out};
    var R: mJ_per_K_per_mol {init: 8345, pub: out};
    var T: kelvin {init: 310, pub: out};
    var alpha0: uM_per_sec {init: 0.05, pub: out};
    // init: 0.056711214 // 0.05
    var alpha1: dimensionless {init: 1, pub: out};
    // init: 0.210342121   // init: 0.25
    var alpha2: per_sec {init: 1, pub: out};
    var Jer: per_sec {init: 0.1, pub: out};
    // init: 0.498035613   // 0.1
    var Ve: uM_per_sec {init: 4.5, pub: out};
    // init: 10.16177256  // 4.5
    var Ke: uM {init: 0.1, pub: out};
    // init: 0.05377898  // 0.1
    var Vp: uM_per_sec {init: 4.5, pub: out};
    // init: 4.111736364  // 4.5
    var Kp: uM {init: 0.4, pub: out};
    // init: 0.400857484
    //  0.4
    var gamma: dimensionless {init: 5.5, pub: out};
    // init: 6.301286174 // 5.5
    var delta_SMC: dimensionless {init: 0.01, pub: out};
    // init: 0.01 //init: 0.051261883  // 0.05*
    var delta2: dimensionless {init: 0.1, pub: out};
  enddef;

  def comp asm_ca as
    var time: second {pub: in};
    var Ca_in_SMC: uM {init: 0.123430830361543, pub: out};
    var Ca_in_SMC0: uM {init: 0.123430830361543, pub: out};
    // init:0.123074 //0.1348287//init: 0.167103
    // var Ca_in_SMC0: uM {init: 0.161386, pub: out};
    // var Ca_in_SMC0: uM {init: 0.1887, pub: out};  //init: 0.241395024 // 0.116477*
    // var Ca_in_SMC: uM {pub: out};
    var Ca_in_SMC_dig: uM {pub: out};
    // var Ca_in_SMC_dig: uM;
    var Ca_in_SMC_dig2: uM;
    var Cai_exp0: uM;
    var Cai_exp1: uM;
    var Cai_exp2: uM;
    var Cai0: uM {init: 0.123430830361543};
    var J_release: uM_per_sec {pub: out};
    var J_releaseD: uM_per_sec;
    var J_serca: uM_per_sec {pub: out};
    var J_sercaN: uM_per_sec;
    var J_sercaDN: uM_per_sec;
    var J_sercaD: uM_per_sec;
    var J_in: uM_per_sec {pub: out};
    var J_pm: uM_per_sec {pub: out};
    var k_ipr: per_sec {pub: in};
    var P_ipr: dimensionless {pub: out};
    var k_RyR: per_sec {pub: in};
    var P_RyR: dimensionless {pub: out};
    var Jer: per_sec {pub: in};
    var Ca_SR: uM {init: 24.9340818873636, pub: out};
    var Ca_SR0: uM {init: 24.9340818873636, pub: out};
    // init: 24.9340   //init: 14.5558862225983 //14.5558862225983  //10.04396733, // 27.5
    var p_agonist: uM {init: 0, pub: out};
    var k_ryr0: dimensionless {pub: in};
    var k_ryr1: dimensionless {pub: in};
    var k_ryr2: uM {pub: in};
    var k_ryr3: uM {pub: in};
    var Ve: uM_per_sec {pub: in};
    var Ke: uM {pub: in};
    var Vp: uM_per_sec {pub: in};
    var Kp: uM {pub: in};
    var alpha0: uM_per_sec {pub: in};
    var alpha1: dimensionless {pub: in};
    var alpha2: per_sec {pub: in};
    var F: C_per_mol {pub: in};
    var y: dimensionless {init: 0.459, pub: out};
    var y0: dimensionless {init: 0.459, pub: out};
    // init:0.48 //init: 0.53
    // var y0: dimensionless {init: 0.38, pub: out}; //init: 0.624736368 // 0.38
    var phi1: per_sec {pub: out};
    var phi2: per_sec {pub: out};
    var l_1: per_uM_per_sec {pub: in};
    var l_2: per_uM_per_sec {pub: in};
    var l_3: per_uM_per_sec {pub: in};
    var l_4: per_uM_per_sec {pub: in};
    var l_5: per_uM_per_sec {pub: in};
    var l_m1: per_sec {pub: in};
    var l_m2: per_sec {pub: in};
    var l_m3: per_sec {pub: in};
    var l_m4: per_sec {pub: in};
    var l_m5: per_sec {pub: in};
    var L1: uM {pub: out};
    var L2: uM {pub: out};
    var L3: uM {pub: out};
    var L4: uM {pub: out};
    var L5: uM {pub: out};
    var delta_SMC: dimensionless {pub: in};
    var delta2: dimensionless {pub: in};
    var V: mV {pub: out};
    var gamma: dimensionless {pub: in};
    var R: mJ_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var I_ca: uA_per_cmsq {pub: out};
    var gca: nS_per_uM {pub: in};
    var m: dimensionless {pub: out};
    var V_ca: mV {pub: out};
    var Vm: mV {pub: in};
    var km: mV {pub: in};
    var Ca_E: uM {pub: out};
    // var Ca_E: uM {init: 1600, pub: out};
    var Ca_E0: uM {init: 1600};
    var Ca_E1: uM {init: 1600};
    var Ca_t: uM {pub: out};
    // var t_ago1: second {init: 50, pub: out};
    // var p_ago1: uM {init: 0, pub: out};
    var t0_KCL: second {init: 260, pub: out};
    var t1_KCL: second {init: 260, pub: out};
    // init: 280// var t1_KCL: second {init: 260, pub: out};   //init: 102
    var t2_KCL: second {init: 2060, pub: out};
    // init: 2100  //init: 2002
    var t3_KCL: second {init: 2060, pub: out};
    var t1_E: second {init: 0, pub: out};
    var t2_E: second {init: 3000, pub: out};
    var V1: mV {init: -30, pub: out};
    // init: -39.8881623
    var ne: dimensionless {init: 2, pub: out};
    var np: dimensionless {init: 3, pub: out};
    var nc: dimensionless {init: 3, pub: out};
    var ns: dimensionless {init: 4, pub: out};
    var ns0: dimensionless {init: 1, pub: out};
    var nv: dimensionless {init: 2, pub: out};
    var nm: dimensionless {init: 2, pub: out};
    var n_in: dimensionless {init: 1};
    var n_pm: dimensionless {init: 1};
    var n_release: dimensionless {init: 1};
    var n_serca: dimensionless {init: 1};
    var delta_SMC0: dimensionless {init: 1};
    var exp1: dimensionless;
    // var K_SR: dimensionless {init: 1};
    // -39.8881623 mV// -30  mV //-54 mV==20mM KCL
    var V0: mV {init: -60, pub: out};
    var rate1: uM_per_sec {pub: out};
    var rate_SR: uM_per_sec {pub: out};
    var rate_m: uM_per_sec {pub: out};
    var rate_m0: uM_per_sec {pub: out};
    var P_RyR_c: dimensionless {pub: out};
    var P_RyR_s: dimensionless;
    var J_inD: uM_per_sec;
    var J_inD0: uM_per_sec;
    var J_inD1: uM_per_sec;
    var J_inD2: uM_per_sec;
    var J_pmD: uM_per_sec;
    var J_in0: uM_per_sec;
    var J_in1: uM_per_sec;
    var J_in2: uM_per_sec;
    var J_pmDN: uM_per_sec;
    var J_pmN: uM_per_sec;
    var J_L_typeD: uM_per_sec {init: 0};
    var h_inf: dimensionless;
    var h: dimensionless {init: 0.762541971656097};
    var h0: dimensionless {init: 0.762541971656097};
    // init: 0.7614 //init: 0.8909  //init: 0.49536
    var Vh: mV {init: -39};
    // init: -50
    var Vt: mV {init: -40};
    var out: dimensionless {init: 1.2};
    // ** extra
    var kh: mV {init: 18};
    // init: 20
    // var kh: mV {init: 12};
    var kt: mV {init: 7};
    // ** extra
    var th: second;
    var th0: second {init: 500};
    // init: 200  //init: 50
    var tb: second {init: 265};
    // var Ca_in_SMC2: uM {init: 0.167103, pub: out};
    //  var J_pm2: uM_per_sec;
    var V_Ca: mV {init: 0};
    var oo: dimensionless {init: 0};
    var Ca_dig_test: uM;
    // Buffering ...start
    // ///        var bt: dimensionless {init: 100};
    // ///        var kbt: dimensionless {init: 0.5};
    // bufferi ng ...end
    // Activation gate ODE1 .....starts.....................................................................
    // var m1_inf: dimensionless;
    // var m1: dimensionless {init: 0.49536};
    // var Vtm: mV {init: -40};
    // ** extra
    // var ktm: mV {init: 7};
    // ** extra
    // var tm1: second;
    // var tm10: second {init: 10};
    //  ** extra
    // Activation gate ODE1 .... Ends............................................................
    Ca_E = sel
      case (time >= t1_E) and (time <= t2_E):
        Ca_E1;
      otherwise:
        Ca_E0;
    endsel;
    // V = time*0.24{per_sec}*1{mV}-90{mV};
    // V = V0+0.01{mV}*time*1{per_sec};
    V = sel
      case (time >= t1_KCL) and (time <= t2_KCL):
        V1;
      otherwise:
        V0;
    endsel;
    L1 = l_m1/l_1;
    L2 = l_m2/l_2;
    L3 = l_m3/l_3;
    L4 = l_m4/l_4;
    L5 = l_m5/l_5;
    V_ca = sel
      case V == 0{mV}:
        (Ca_in_SMC-Ca_E)*R*T/(nv*F);
      otherwise:
        V*(Ca_in_SMC-Ca_E*exp(-nv*V*F/(R*T)))/(1{dimensionless}-exp(-nv*V*F/(R*T)))*1{per_uM};
    endsel;
    // V_Ca        = V*(Ca_in_SMC-out*Ca_E*exp(-nv*V*F/(R*T)))/(1{dimensionless}-exp(-nv*V*F/(R*T)))*1{per_uM};
    I_ca = gca*pow(m, nm)*V_ca*h*1{M_per_cmsq};
    m = 1{dimensionless}/(1{dimensionless}+exp(-(V-Vm)/km));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V-Vh)/kh));
    th = th0+1{second}/(1{dimensionless}+exp(-(V-Vt)/kt));
    ode(h, time) = (h_inf-h)/th;
    // //buffering       delta_SMC    = 1{dimensionless}/(1{dimensionless}+bt*kbt/sqr(kbt+Ca_in_SMC));
    // activation gate ODE2-----starts----------------
    // m1_inf        = 1{dimensionless}/(1{dimensionless}+exp(-(V-Vm)/km));
    // tm1           = tm10+1{second}/(1{dimensionless}+exp((V-Vtm)/ktm));
    // ode(m1, time) = (m1_inf-m1)/tm1;
    // activation gate ODE2-----ends----------------
    //   ** extra
    // **extra inactivation gate
    J_pm = n_pm*Vp*pow(Ca_in_SMC, np)/(pow(Kp, np)+pow(Ca_in_SMC, np));
    J_pmN = -n_pm*Vp*pow(Ca_in_SMC, np)/(pow(Kp, np)+pow(Ca_in_SMC, np));
    J_pmD = delta_SMC*J_pm;
    J_pmDN = -delta_SMC*J_pm;
    J_inD = delta_SMC*J_in;
    J_inD0 = delta_SMC*n_in*alpha0;
    J_inD1 = delta_SMC*n_in*(-alpha1)*I_ca/(2{umol_per_cmsq}*F);
    J_inD2 = delta_SMC*n_in*alpha2*p_agonist;
    J_in0 = n_in*alpha0;
    J_in1 = n_in*(-alpha1)*I_ca/(2{umol_per_cmsq}*F);
    J_in2 = n_in*alpha2*p_agonist;
    J_serca = n_serca*Ve*pow(Ca_in_SMC, ne)/(pow(Ke, ne)+pow(Ca_in_SMC, ne));
    J_sercaN = -J_serca;
    J_sercaDN = -delta2*J_serca;
    J_sercaD = delta2*J_serca;
    // J_serca = Ve*(pow(Ca_in_SMC, ne)-K_SR*Ca_SR)/(pow(Ke, ne)+pow(Ca_in_SMC, ne));
    // -(K_SR{dimensionless}*Ca_SR)/Ca_SR);
    J_release = n_release*(k_ipr*P_ipr+k_RyR*P_RyR+Jer)*(Ca_SR-Ca_in_SMC);
    J_releaseD = delta2*J_release;
    J_in = n_in*(alpha0-alpha1*I_ca/(2{umol_per_cmsq}*F)+alpha2*p_agonist);
    // J_L_typeD = n_in*(alpha0-alpha1*gca*pow(m, nm)*V_Ca*1{M_per_cmsq}/(2{umol_per_cmsq}*F)+alpha2*p_agonist);
    // alpha0-alpha1*gca*0.622{dimesionless}*pow(m, nm)*V_ca*1{M_per_cmsq}/(2{umol_per_cmsq}*F));
    P_ipr = pow(p_agonist*Ca_in_SMC*(1{dimensionless}-y)/((p_agonist+L1)*(Ca_in_SMC+L5)), 3{dimensionless});
    P_RyR = (k_ryr0+k_ryr1*pow(Ca_in_SMC, nc)/(pow(k_ryr2, nc)+pow(Ca_in_SMC, nc)))*pow(Ca_SR, ns)/(ns0*pow(k_ryr3, ns)+pow(Ca_SR, ns));
    P_RyR_s = pow(Ca_SR, ns)/(ns0*pow(k_ryr3, ns)+pow(Ca_SR, ns));
    P_RyR_c = k_ryr0+k_ryr1*pow(Ca_in_SMC, nc)/(pow(k_ryr2, nc)+pow(Ca_in_SMC, nc));
    phi1 = (l_m4*L2*L1+l_m2*L4*p_agonist)*Ca_in_SMC/(L4*L2*(L1+p_agonist));
    phi2 = (l_m2*p_agonist+l_m4*L3)/(L3+p_agonist);
    ode(y, time) = phi1*(1{dimensionless}-y)-phi2*y;
    ode(Ca_in_SMC, time) = delta2*(J_release-J_serca)+delta_SMC*(J_in-J_pm);
    rate1 = delta2*(n_release*J_release-n_serca*J_serca)+delta_SMC*(J_in-J_pm);
    rate_m0 = delta_SMC0*(J_in-J_pm);
    rate_SR = delta2*(n_release*J_release-n_serca*J_serca);
    rate_m = delta_SMC*(J_in-J_pm);
    ode(Ca_SR, time) = gamma*(J_serca-J_release);
    Ca_t = Ca_in_SMC+1{dimensionless}/gamma*Ca_SR;
    exp1 = -exp(-nv*V*F/(R*T));
    // ode(Ca_in_SMC2, time) = delta2*(J_release-J_serca)+delta_SMC*(J_L_typeD-J_pm2);
    // J_pm2                 = n_pm*Vp*pow(Ca_in_SMC2, np)/(pow(Kp, np)+pow(Ca_in_SMC2, np));
    // (0.0044138736{dimensionless}*(time*1{per_sec}-266{dimensionless})+0.116477{dimensionless})*1{uM};
    // 0.116477{uM};
    Ca_in_SMC_dig = sel
      case (time >= 0{second}) and (time < t0_KCL):
        0.05{uM};
      case (time >= 266{second}) and (time < 313.5{second}):
        oo*0.05{uM}+(1{dimensionless}-oo)*(0.0058{dimensionless}*(time*1{per_sec}-266{dimensionless})+0.05{dimensionless})*1{uM};
      case (time >= 313.5{second}) and (time < 902{second}):
        oo*0.05{uM}+(1{dimensionless}-oo)*(3.84{dimensionless}*pow(10{dimensionless}, -11{dimensionless})*pow(time*1{per_sec}-313.5{dimensionless}, 3{dimensionless})-9.63{dimensionless}*pow(10{dimensionless}, -5{dimensionless})*(time*1{per_sec}-313.5{dimensionless})+0.326136{dimensionless})*1{uM};
      case (time >= 902{second}) and (time < 1548{second}):
        oo*0.05{uM}+(1{dimensionless}-oo)*(-4.16{dimensionless}*pow(10{dimensionless}, -11{dimensionless})*pow(time*1{per_sec}-902{dimensionless}, 3{dimensionless})-1.3{dimensionless}*pow(10{dimensionless}, -5{dimensionless})*(time*1{per_sec}-902{dimensionless})+0.277273{dimensionless})*1{uM};
      case (time >= 1548{second}) and (time < t3_KCL):
        oo*0.05{uM}+(1{dimensionless}-oo)*(6.53{dimensionless}*pow(10{dimensionless}, -12{dimensionless})*pow(time*1{per_sec}-1548{dimensionless}, 3{dimensionless})-2.08{dimensionless}*pow(10{dimensionless}, -5{dimensionless})*(time*1{per_sec}-1548{dimensionless})+0.257955{dimensionless})*1{uM};
      otherwise:
        0.05{uM};
    endsel;
    Ca_dig_test = oo*0.05{uM}+(1{dimensionless}-oo)*(-4.16{dimensionless}*pow(10{dimensionless}, -11{dimensionless})*pow(time*1{per_sec}-902{dimensionless}, 3{dimensionless})-1.3{dimensionless}*pow(10{dimensionless}, -5{dimensionless})*(time*1{per_sec}-902{dimensionless})+0.277273{dimensionless})*1{uM};
    Ca_in_SMC_dig2 = sel
      case (time >= 0{second}) and (time < tb-5{second}):
        0.05{uM};
      case (time >= tb-5{second}) and (time < tb):
        (0.116477{uM}-0.05{uM})/5{second}*(time-(tb-5{second}))+0.05{uM};
      case (time >= tb) and (time < tb+5{second}):
        (0.226136{uM}-0.116477{uM})/5{second}*(time-tb)+0.116477{uM};
      case (time >= tb+5{second}) and (time < tb+15{second}):
        (0.275568{uM}-0.226136{uM})/10{second}*(time-(tb+5{second}))+0.226136{uM};
      case (time >= tb+15{second}) and (time < tb+25{second}):
        (0.3022273{uM}-0.275568{uM})/10{second}*(time-(tb+15{second}))+0.275568{uM};
      case (time >= tb+25{second}) and (time < tb+35{second}):
        (0.317614{uM}-0.3022273{uM})/10{second}*(time-(tb+25{second}))+0.3022273{uM};
      case (time >= tb+35{second}) and (time < tb+45{second}):
        (0.326136{uM}-0.317614{uM})/10{second}*(time-(tb+35{second}))+0.317614{uM};
      case (time >= tb+45{second}) and (time < tb+55{second}):
        (0.326705{uM}-0.326136{uM})/10{second}*(time-(tb+45{second}))+0.326136{uM};
      case (time >= tb+55{second}) and (time < tb+70{second}):
        (0.326136{uM}-0.326705{uM})/15{second}*(time-(tb+55{second}))+0.326705{uM};
      case (time >= tb+70{second}) and (time < tb+85{second}):
        (0.319318{uM}-0.326136{uM})/15{second}*(time-(tb+70{second}))+0.326136{uM};
      case (time >= tb+85{second}) and (time < tb+115{second}):
        (0.313636{uM}-0.319318{uM})/30{second}*(time-(tb+85{second}))+0.319318{uM};
      case (time >= tb+115{second}) and (time < tb+175{second}):
        (0.305682{uM}-0.313636{uM})/60{second}*(time-(tb+115{second}))+0.313636{uM};
      case (time >= tb+175{second}) and (time < tb+235{second}):
        (0.301705{uM}-0.305682{uM})/60{second}*(time-(tb+175{second}))+0.305682{uM};
      case (time >= tb+235{second}) and (time < tb+295{second}):
        (0.295455{uM}-0.301705{uM})/60{second}*(time-(tb+235{second}))+0.301705{uM};
      case (time >= tb+295{second}) and (time < tb+595{second}):
        (0.277273{uM}-0.295455{uM})/300{second}*(time-(tb+295{second}))+0.295455{uM};
      case (time >= tb+595{second}) and (time < tb+1195{second}):
        (0.257955{uM}-0.277273{uM})/600{second}*(time-(tb+595{second}))+0.277273{uM};
      case (time >= tb+1195{second}) and (time < tb+1795{second}):
        (0.240909{uM}-0.257955{uM})/600{second}*(time-(tb+1195{second}))+0.257955{uM};
      otherwise:
        0.05{uM};
    endsel;
    // 0.116477{uM};
    // 0.116477{uM};
    // p_agonist = sel
    //             case (time >= t_ago1):
    //                 p_ago1;
    //             otherwise:
    //                0 {uM};
    // endsel;
    Cai_exp1 = sel
      case (time >= tb+0{second}) and (time < tb+3{second}):
        0{uM};
      case (time >= tb+40{second}) and (time < tb+43{second}):
        0{uM};
      case (time >= tb+65{second}) and (time < tb+68{second}):
        0.3075{uM};
      case (time >= tb+95{second}) and (time < tb+98{second}):
        0.2779{uM};
      case (time >= tb+145{second}) and (time < tb+148{second}):
        0.2001{uM};
      case (time >= tb+195{second}) and (time < tb+198{second}):
        0.1742{uM};
      case (time >= tb+295{second}) and (time < tb+298{second}):
        0.1527{uM};
      case (time >= tb+395{second}) and (time < tb+398{second}):
        0.1423{uM};
      case (time >= tb+495{second}) and (time < tb+498{second}):
        0.1519{uM};
      case (time >= tb+595{second}) and (time < tb+598{second}):
        0.1542{uM};
    endsel;
    Cai_exp0 = sel
      case (time >= 0{second}) and (time < 3{second}):
        0.116477{uM};
      case (time >= tb+0{second}) and (time < tb+3{second}):
        0.116477{uM};
      case (time >= tb+5{second}) and (time < tb+8{second}):
        0.226136{uM};
      case (time >= tb+15{second}) and (time < tb+18{second}):
        0.275568{uM};
      case (time >= tb+25{second}) and (time < tb+28{second}):
        0.3022273{uM};
      case (time >= tb+35{second}) and (time < tb+38{second}):
        0.317614{uM};
      case (time >= tb+45{second}) and (time < tb+48{second}):
        0.326136{uM};
      case (time >= tb+55{second}) and (time < tb+58{second}):
        0.326705{uM};
      case (time >= tb+70{second}) and (time < tb+73{second}):
        0.326136{uM};
      case (time >= tb+85{second}) and (time < tb+88{second}):
        0.319318{uM};
      case (time >= tb+115{second}) and (time < tb+118{second}):
        0.313636{uM};
      case (time >= tb+175{second}) and (time < tb+178{second}):
        0.305682{uM};
      case (time >= tb+235{second}) and (time < tb+238{second}):
        0.301705{uM};
      case (time >= tb+295{second}) and (time < tb+298{second}):
        0.295455{uM};
      case (time >= tb+595{second}) and (time < tb+598{second}):
        0.277273{uM};
      case (time >= tb+1195{second}) and (time < tb+1198{second}):
        0.257955{uM};
      case (time >= tb+1795{second}) and (time < tb+1798{second}):
        0.240909{uM};
    endsel;
    // I updated the time points on 2026_06_29
    // (in my previoues digitisation process on digitised website, I mistakenly used second instead of original time unit,
    //  which was minutes before converting logaritmic time scale to a linear time scale.)
    // otherwise:
    //     0.116477{uM};
    Cai_exp2 = (0.326{uM}-Cai0)/0.326{uM}*Cai_exp1+Cai0;
  enddef;

  def comp calcium as
    var time: second {pub: in};
    var k1: per_sec {pub: out};
    var k2h: per_sec {pub: out};
    var k1a: per_sec {init: 10, pub: out};
    // init: 0.5962
    var Ca_in_SMC: uM {pub: in};
    var Ca: uM {init: 0.05};
    var Ca_in_SMC_dig: uM {pub: in};
    var k1b: uM {init: 0.7, pub: out};
    // it was var k1b: uM {init: 0.41, pub: out};
    // k1b was 0.7
    var tp: second {init: 564.67, pub: out};
    var P: dimensionless {init: 0, pub: out};
    var P0: dimensionless {init: 0};
    // init: 0.5660310
    // 0.5822 // init:0.001
    var kon: dimensionless {pub: out};
    var koff: per_sec {pub: out};
    var k2b: per_sec {init: 76.23, pub: out};
    // var k2b: per_sec {init: 76.23, pub: out};
    var kon1: dimensionless {init: 0.000125, pub: out};
    var kon2: uM {init: 0.1, pub: out};
    // kon2 was 0.000174
    var koff1: per_sec {init: 0.4629, pub: out};
    // init: 0.4629
    var koff2: per_sec {init: 120.84, pub: out};
    // koff2 was 120.84?!
    var p_agonist: uM {pub: in};
    //   var Ca_in_SMC2: uM {pub: in};
    // kon = kon1+sqr(Ca)/(sqr(kon2)+sqr(Ca));
    var n1: dimensionless {init: 4};
    var n2: dimensionless {init: 2};
    var n2h: dimensionless {init: 2};
    var k2y: per_sec {pub: in};
    var k1i: per_sec {pub: out};
    var k2hi: per_sec {pub: out};
    var koni: dimensionless {pub: out};
    var Pi: dimensionless {init: 0};
    var P0i: dimensionless {init: 0};
    kon = kon1+pow(Ca_in_SMC, n2)/(sqr(kon2)+pow(Ca_in_SMC, n2));
    // *k2y*1{sec}; //k2y*1{sec};//
    koff = koff1+koff2*p_agonist/(1{uM}+p_agonist);
    ode(P, time) = 1{d1imensionless}/tp*(kon*(1{dimensionless}-P)-koff*P);
    // P is the fraction of activated MLCP
    k2h = k2b*pow(P, n2h);
    // k1  = k1a*pow(Ca, 4{dimensionless})/(pow(k1b, 4{dimensionless})+pow(Ca, 4{dimensionless}));
    k1 = k1a*pow(Ca_in_SMC, n1)/(pow(k1b, n1)+pow(Ca_in_SMC, n1));
    koni = kon1+pow(Ca_in_SMC_dig, n2)/(sqr(kon2)+pow(Ca_in_SMC_dig, n2));
    ode(Pi, time) = 1{d1imensionless}/tp*(koni*(1{dimensionless}-Pi)-koff*Pi);
    // P is the fraction of activated MLCP
    k2hi = k2b*pow(Pi, n2h);
    k1i = k1a*pow(Ca_in_SMC_dig, n1)/(pow(k1b, n1)+pow(Ca_in_SMC_dig, n1));
  enddef;
  // End of SMC_calcium_file_$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$$
enddef;
